PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2021.2.3
  Window size (pixels) = [2560, 1440]
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine trial
  Routine fixation
    CodeComponent code_fixation
      Code Type = Auto->JS
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      Begin Experiment:
        portt = [];

        stim_sizes = [0.15, 0.15];
        fix_size = [0.015,0.015]
      Begin Routine:
        buttons = 0;
        dur_fix = 40
    PolygonComponent cross_fixation
      fillColor = black
      lineColor = black
      shape = cross
      size = fix_size
      startVal [frame N] = 0
      stopVal [frame N] = $dur_fix
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [frame N] = 0
      stopVal [frame N] = $dur_fix
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  Routine info_stim1
    CodeComponent code_info
      Code Type = Both
      Begin Experiment:
        stim_sizes = [0.1, 0.1];
        instr = '';
        mov = '';
        green_f = 0;
      Begin JS Experiment:
        stim_sizes = [0.1, 0.1];
        instr = "";
        mov = "";
        green_f = 0;
      Begin JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        if (_pj.in_es6(trial_n, [11])) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
        im1 = "b_4.png";
        im2 = "g_4.png";
        im3 = "p_4.png";
        im4 = "y_4.png";
        instr = `Well done! You gained ${points_won} points. There is no perfect number of points but try to always maximise them. \n Press a button to start the main game whenever you're ready.`
      Begin Routine:
        if trial_n in [11]:
            continueRoutine = True
        else:
            continueRoutine = False

        im1 = 'b_4.png'
        im2 = 'g_4.png'
        im3 = 'p_4.png'
        im4 = 'y_4.png'
        instr = "Well done! You gained %s points. There is no perfect number of points but try to always maximise them. \n Press a button to start the main game whenever you're ready." % str(points_won)
    TextComponent text
      letterHeight = 0.026
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr
      wrapWidth = 0.56
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    ImageComponent image
      image [set every repeat] = $im1
      pos = (-0.1, -0.1)
      size = stim_sizes
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image [set every repeat] = $im2
      pos = (-0.034, -0.1)
      size = stim_sizes
      startVal [time (s)] = 0.0
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    ImageComponent image_3
      image [set every repeat] = $im3
      pos = (0.034, -0.1)
      size = stim_sizes
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image [set every repeat] = $im4
      pos = (0.1, -0.1)
      size = stim_sizes
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent green_frame
      image = outline.png
      opacity [set every repeat] = green_f
      size = (1.7778, 1)
      startVal [time (s)] = 0.0
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  Routine cues
    CodeComponent code_resp
      Code Type = Both
      Begin Experiment:
        show_me_left = 0
        show_me_right = 0
        keep_me_left = 0
        keep_me_right = 0
        correct_count = 0

        msg = '';
        points_won = 0;
        grand_total = 0;
        portt = 99;
        res = ''
      Begin JS Experiment:
        show_me_left = 0;
        show_me_right = 0;
        keep_me_left = 0;
        keep_me_right = 0;
        correct_count = 0;
        msg = "";
        points_won = 0;
        grand_total = 0;
        portt = 99;
        res = "";
      Begin JS Routine:
        dur_cues = 120;
        if ((trial_n === 11)) {
            points_won = 0;
        }
      Begin Routine:
        dur_cues = 120

        if trial_n == 11:
            points_won = 0;
      End JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        if (typeof key_resp_3.keys === 'undefined') {
            msg = "Too slow";
            show_me_left = 0;
            show_me_right = 0;
            keep_me_left = 1;
            keep_me_right = 1;
            feed = left_rew;
            feed_pos = [1, (- 0.02)];
        } else {
            if (_pj.in_es6(key_resp_3.keys, "right")) {
                show_me_left = 0;
                show_me_right = 1;
                keep_me_left = 1;
                keep_me_right = 0;
                feed = right_rew;
                feed_pos = [0.06, (- 0.03)];
                res = 'rrr';
                msg = "";
                points_won = (points_won + right_rew_dbl);
                grand_total = (grand_total + right_rew_dbl);
            } else {
                if (_pj.in_es6(key_resp_3.keys, "left")) {
                    show_me_left = 1;
                    show_me_right = 0;
                    keep_me_left = 0;
                    keep_me_right = 1;
                    feed = left_rew;
                    feed_pos = [(- 0.06), (- 0.03)];
                    msg = "";
                    res = 'lll';
                    points_won = (points_won + left_rew_dbl);
                    grand_total = (grand_total + left_rew_dbl);
                } else {
                    if (typeof key_resp_3.keys !== 'undefined') {
                        msg = "Wrong button";
                        show_me_left = 0;
                        show_me_right = 0;
                        keep_me_left = 1;
                        keep_me_right = 1;
                        feed = left_rew;
                        feed_pos = [1, (- 0.02)];
                    }
                }
            }
        }
        if (((res === "lll") && (correct === 0))) {
            correct_count = (correct_count + 1);
        } else {
            if (((res === "rrr") && (correct === 1))) {
                correct_count = (correct_count + 1);
            }
        }
      End Routine:
        if key_resp_3.keys in ['', [], None]:
           msg = 'Too slow'
           show_me_left = 0
           show_me_right = 0
           keep_me_left = 1
           keep_me_right = 1
           feed = left_rew
           feed_pos = [1, -0.8]
        elif key_resp_3.keys in 'right':
           show_me_left = 0
           show_me_right = 1
           keep_me_left = 1
           keep_me_right = 0
           feed =  right_rew
           feed_pos = [0.06, -0.03]
           res = 'rrr'
           msg = ''
           points_won = points_won + right_rew_dbl;
           grand_total = grand_total + right_rew_dbl;
        elif key_resp_3.keys in 'left':
           show_me_left = 1
           show_me_right = 0
           keep_me_left = 0
           keep_me_right = 1
           feed = left_rew
           feed_pos = [-0.06, -0.03]
           res = 'lll'
           msg = ''
           points_won = points_won + left_rew_dbl;
           grand_total = grand_total + left_rew_dbl;
        elif key_resp_3.keys != None:
           msg = 'Wrong button'
           show_me_left = 0
           show_me_right = 0
           keep_me_left = 1
           keep_me_right = 1
           feed = left_rew
           feed_pos = [1, -0.8]

        if res == 'lll' and correct == 0:
            correct_count = correct_count+1;
        elif res == 'rrr' and correct == 1:
            correct_count = correct_count+1;
    PolygonComponent cross_stim2
      fillColor = black
      lineColor = black
      shape = cross
      size = fix_size
      startVal [frame N] = 0
      stopVal [frame N] = dur_cues
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    ImageComponent symbol_left
      image [set every repeat] = $left
      pos = (-0.06, 0)
      size = stim_sizes
      startVal [frame N] = 0.0
      stopVal [frame N] = dur_cues
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    ImageComponent symbol_right
      image [set every repeat] = $right
      pos = (0.06, 0)
      size = stim_sizes
      startVal [frame N] = 0
      stopVal [frame N] = dur_cues
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [frame N] = 0
      stopVal [frame N] = 120
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  Routine feedback
    CodeComponent code_feed
      Code Type = Auto->JS
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      Begin Routine:
        if msg == 'Wrong button' or msg == 'Too slow':
            continueRoutine = False
        else:
            continueRoutine = True
    PolygonComponent cross_feed
      fillColor = black
      lineColor = black
      shape = cross
      size = fix_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    ImageComponent s_left
      image [set every repeat] = $left
      opacity [set every repeat] = keep_me_left
      pos = (-0.06, 0)
      size = stim_sizes
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    ImageComponent s_right
      image [set every repeat] = $right
      opacity [set every repeat] = keep_me_right
      pos = (0.06, 0)
      size = stim_sizes
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    ImageComponent s_if_left
      image [set every repeat] = $left_selected
      opacity [set every repeat] = show_me_left
      pos = (-0.06, 0)
      size = stim_sizes
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    ImageComponent s_if_right
      image [set every repeat] = $right_selected
      opacity [set every repeat] = show_me_right
      pos = (0.06, 0)
      size = stim_sizes
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    TextComponent text_2
      color = black
      letterHeight = 0.03
      pos [set every repeat] = feed_pos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $feed
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    TextComponent text_5
      letterHeight = 0.03
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $correct_count
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  Routine too_slow
    CodeComponent code_slow
      Code Type = Auto->JS
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      Begin Routine:
        if msg == 'Wrong button' or msg == 'Too slow':
            continueRoutine = True
        else:
            continueRoutine = False
      End Routine:
        msg = '';
    PolygonComponent cross_slow
      fillColor = black
      lineColor = black
      shape = cross
      size = fix_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    ImageComponent s_left_2
      image [set every repeat] = $left
      opacity [set every repeat] = 1
      pos = (-0.06, 0)
      size = stim_sizes
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    ImageComponent s_right_2
      image [set every repeat] = $right
      opacity [set every repeat] = 1
      pos = (0.06, 0)
      size = stim_sizes
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    TextComponent text_3
      letterHeight = 0.02
      pos = [0,-0.08]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $msg
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  Routine general_feed
    CodeComponent code_gen_feed
      Code Type = Auto->JS
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      Begin Experiment:
        fix_size = [0.02,0.02]
        opacity_im = 1
        msg_end = '';
      Begin Routine:
        if correct_count > 60:
            continueRoutine = True
        else:
            continueRoutine = False

        opacity_n = 1
        msg_end = 'Task finished. Well Done! Total points won: ' + str(grand_total) + '\n Ending experiment'
      End Routine:
        if correct_count > 60:
            trials_3.finished = True;
    TextComponent text_6
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $msg_end
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  Routine cues_passive
    CodeComponent code_cues_p
      Code Type = Auto->JS
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      Begin Experiment:
        feed_pos = [1, 1]
        show_me_left = 0
        show_me_right = 0
        keep_me_left = 0
        keep_me_right = 0

        msg = '';
        points_won = 0;
      Begin Routine:
        if portt != 99:
            pp = int(trigger_integer)
            p_port.setData(pp)
        else:
            pass

        if key_resp_6.keys in ['', [], None]:
            trials_2.finished = 0
        else:
            trials_2.finished = 1

        #if trials_2.thisTrialN > 35:
        #    trials_2.finished = 1
      End Routine:
        if portt != 99:
            p_port.setData(0)
        else:
            pass
    PolygonComponent cross_stim
      fillColor = black
      lineColor = black
      shape = cross
      size = fix_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    ImageComponent symbol_left_2
      image [set every repeat] = $left
      pos = (-0.05, 0)
      size = stim_sizes
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    ImageComponent symbol_right_2
      image [set every repeat] = $right
      pos = (0.05, 0)
      size = stim_sizes
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    KeyboardComponent key_resp_6
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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  Routine selection_animation
    CodeComponent code_sel
      Code Type = Auto->JS
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      Begin Routine:
        if msg == 'Wrong button' or msg == 'Too slow':
            continueRoutine = False
        else:
            continueRoutine = True

        dur_sel = 50 # values will range from 60 to 90
        #dur_sel = randint(low = 120/2, high = 180/2) # values will range from 60 to 90
    PolygonComponent cross_sel
      fillColor = black
      lineColor = black
      shape = cross
      size = fix_size
      startVal [frame N] = 0
      stopVal [frame N] = $dur_sel
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    ImageComponent s_left_3
      image [set every repeat] = $left
      opacity [set every repeat] = keep_me_left
      pos = (-0.06, 0)
      size = stim_sizes
      startVal [frame N] = 0
      stopVal [frame N] = $dur_sel
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    ImageComponent s_right_3
      image [set every repeat] = $right
      opacity [set every repeat] = keep_me_right
      pos = (0.06, 0)
      size = stim_sizes
      startVal [frame N] = 0.0
      stopVal [frame N] = $dur_sel
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    ImageComponent s_if_left_3
      image [set every repeat] = $left_selected
      opacity [set every repeat] = show_me_left
      pos = (-0.06, 0)
      size = stim_sizes
      startVal [frame N] = 0.0
      stopVal [frame N] = $dur_sel
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    ImageComponent s_if_right_3
      image [set every repeat] = $right_selected
      opacity [set every repeat] = show_me_right
      pos = (0.06, 0)
      size = stim_sizes
      startVal [frame N] = 0.0
      stopVal [frame N] = $dur_sel
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  Routine Zoom
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        mov = '';
        green_f = 0;
      Begin Routine:
        if trial_id == 181:
            mov = 'video1.mp4'
        elif trial_id == 361:
            mov = 'video2.mp4'
        else:
            mov = 'video2.mp4'
            continueRoutine = False

        if trial_id >= 181:
            green_f = 1;
        else:
            green_f = 0;
    MovieComponent movie
      No audio = True
      backend = moviepy
      forceEndRoutine = True
      movie [set every repeat] = $mov
      size [set every repeat] = win.size
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine info_stim2
    CodeComponent code_info_2
      Code Type = Auto->JS
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      Begin Experiment:
        stim_sizes = [0.1, 0.1];
      Begin Routine:
        if trial_n in [1]:
            continueRoutine = True
        else:
            continueRoutine = False

        if block == 1:
            im1 = 'b_1.png'
            im2 = 'g_1.png'
            im3 = 'p_1.png'
            im4 = 'y_1.png'
        elif block == 2:
            im1 = 'b_2.png'
            im2 = 'g_2.png'
            im3 = 'p_2.png'
            im4 = 'y_2.png'
        elif block == 3:
            im1 = 'b_3.png'
            im2 = 'g_3.png'
            im3 = 'p_3.png'
            im4 = 'y_3.png'
        elif block == 4:
            im1 = 'b_4.png'
            im2 = 'g_4.png'
            im3 = 'p_4.png'
            im4 = 'y_4.png'
    TextComponent text_4
      letterHeight = 0.02
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      wrapWidth = 0.56
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      text:
        New block. In this block, you will choose between pairs of  slot machines (shown below) that give you variable points.

        To win the game you should select the slot machines strategically so that by the end of the block you have as many points as possible.

        There are a few breaks throughout that also tell you the total number of points you won.

        Press a button to start whenever you're ready.
    ImageComponent image_5
      image [set every repeat] = $im1
      pos = (-0.1, -0.2)
      size = stim_sizes
      startVal [time (s)] = 0.0
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    ImageComponent image_6
      image [set every repeat] = $im2
      pos = (-0.034, -0.2)
      size = stim_sizes
      startVal [time (s)] = 0.0
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    ImageComponent image_7
      image [set every repeat] = $im3
      pos = (0.034, -0.2)
      size = stim_sizes
      startVal [time (s)] = 0.0
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    ImageComponent image_8
      image [set every repeat] = $im4
      pos = (0.1, -0.2)
      size = stim_sizes
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_7
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    cedrusButtonBoxComponent buttonBox_3
      deviceNumber = 0
      disabled = True
      discard previous = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = False
      syncScreenRefresh = True
      useBoxTimer = False
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    ImageComponent green_frame_8
      image = outline.png
      opacity [set every repeat] = green_f
      size = (1.7778, 1)
      startVal [time (s)] = 0.0
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  Routine General_info
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        msg_intro = '';
        group_1 = '';
        group_2 = '';
      Begin Routine:
        if trial_id == 1:
            continueRoutine = True
        else:
            continueRoutine = False
    TextComponent Info_main
      letterHeight = 0.02
      pos = (0, 0.13)
      startVal [time (s)] = 0.0
      text [set every repeat] = $str('This experiment consists of 3 main blocks. Two separate people will observe your performance during the 2nd and 3rd blocks. One of them will be from your group of') + str(group_1) + str('s while the second will be from your group of ') + str(group_2) + str('s.\n You will see four of the stimuli shown below in different combinations in each block. Your task will be to choose between left or right with the aim to maximise the points you win.')
      wrapWidth = 0.5
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    ImageComponent all_stimuli
      image = info_stim.png
      pos = (0, -0.11)
      size = (0.27, 0.251)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prep_zoom
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        msg_prep = ''
        which_group = ''
      Begin Routine:
        # If participant is overestimator

        if trial_id in [181, 361]:
            continueRoutine = True
        else:
            continueRoutine = False

        if group_1 == 'underestimators':
            if trial_id == 181:
                which_group = ' unlike you are underestimators.';
            elif trial_id == 361:
                which_group = ' are overestimators like you.';
        elif group_1 == 'overestimators':
            if trial_id == 181:
                which_group = ' are overestimators like you.';
            elif trial_id == 361:
                which_group = ' unlike you are underestimators.';

        msg_prep = str('Shortly you will be connected to the first observer who is from a group who ' + which_group)
    TextComponent text_7
      letterHeight = 0.02
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $msg_prep
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  Routine info_start
    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine info_start1
    CodeComponent code_info_3
      Code Type = Auto->JS
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      Begin Experiment:
        stim_sizes = [0.1, 0.1];
        instr = '';
        mov = '';
        green_f = 0;
      Begin Routine:
        if trial_n in [1]:
            continueRoutine = True
        else:
            continueRoutine = False

        im1 = 'b_4.png'
        im2 = 'g_4.png'
        im3 = 'p_4.png'
        im4 = 'y_4.png'
        instr = "In this practice block, you will choose between pairs of slot machines (shown below) that give you variable points. To win the game you should select the slot machines strategically so that by the end of the block you have as many points as possible. Select the left or right slot machine by using the left or right keys on the keyboard. You have 2 seconds to make your choice. \n Now we will do a short practice. Press the left or right key to start whenever you're ready."
    TextComponent text_10
      letterHeight = 0.026
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr
      wrapWidth = 0.56
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    ImageComponent image_9
      image [set every repeat] = $im1
      pos = (-0.1, -0.2)
      size = stim_sizes
      startVal [time (s)] = 0.0
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    ImageComponent image_10
      image [set every repeat] = $im2
      pos = (-0.034, -0.2)
      size = stim_sizes
      startVal [time (s)] = 0.0
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    ImageComponent image_11
      image [set every repeat] = $im3
      pos = (0.034, -0.2)
      size = stim_sizes
      startVal [time (s)] = 0.0
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    ImageComponent image_12
      image [set every repeat] = $im4
      pos = (0.1, -0.2)
      size = stim_sizes
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_9
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ending
    TextComponent text_9
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Please notify the experimenter that you have completed the task. Ending experiment.
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Flow
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = prep_stim_info.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('left', 'g_4.png'), ('right', 'b_4.png'), ('left_selected', 'g_4_d.png'), ('right_selected', 'b_4_d.png'), ('right_rew_dbl', 32), ('left_rew_dbl', 69), ('stim1', 1), ('stim2', 3), ('trigger_integer', 13), ('block', 4), ('trial_n', 1), ('trial_id', 541), ('right_rew', '3 2'), ('left_rew', '6 9'), ('typeOfChoice', 2), ('correct', 0.0)]),
      OrderedDict([('left', 'g_4.png'), ('right', 'y_4.png'), ('left_selected', 'g_4_d.png'), ('right_selected', 'y_4_d.png'), ('right_rew_dbl', 50), ('left_rew_dbl', 74), ('stim1', 1), ('stim2', 4), ('trigger_integer', 14), ('block', 4), ('trial_n', 2), ('trial_id', 542), ('right_rew', '5 0'), ('left_rew', '7 4'), ('typeOfChoice', 3), ('correct', 0.0)]),
      OrderedDict([('left', 'p_4.png'), ('right', 'b_4.png'), ('left_selected', 'p_4_d.png'), ('right_selected', 'b_4_d.png'), ('right_rew_dbl', 36), ('left_rew_dbl', 61), ('stim1', 2), ('stim2', 3), ('trigger_integer', 23), ('block', 4), ('trial_n', 3), ('trial_id', 543), ('right_rew', '3 6'), ('left_rew', '6 1'), ('typeOfChoice', 4), ('correct', 0.0)]),
      OrderedDict([('left', 'p_4.png'), ('right', 'g_4.png'), ('left_selected', 'p_4_d.png'), ('right_selected', 'g_4_d.png'), ('right_rew_dbl', 55), ('left_rew_dbl', 65), ('stim1', 2), ('stim2', 1), ('trigger_integer', 21), ('block', 4), ('trial_n', 4), ('trial_id', 544), ('right_rew', '5 5'), ('left_rew', '6 5'), ('typeOfChoice', 1), ('correct', None)])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
    Routine info_start1
    Routine info_stim1
    Routine fixation
    Routine cues
    Routine selection_animation
    Routine feedback
    Routine too_slow
    Routine general_feed
  LoopTerminator trials_3
  Routine ending
